<?xml version="1.0" encoding="UTF-8"?>

<bioml>
 
 <note> FILE LOCATIONS. Replace them with your input (.mzXML) file and output file -- these are REQUIRED. Optionally a log file and a sequence output file of all protein sequences identified in the first-pass can be specified. Use of FULL path (not relative) paths is recommended. </note>

 <!--   <note type="input" label="spectrum, path">LargeSample/OR20080317_S_SILAC-LH_1-1_01.mzXML</note>   -->
   <!-- 
	<note type="input" label="spectrum, path">or20080317_s_silac-lh_1-1_01short.mzxml</note>
	<note type="input" label="spectrum, path">SmallSample/one_spectrum.mzxml</note> 
	<note type="input" label="output, path">yeast_orfs_all_REV01_short.xml</note> 
 	<note type="input" label="protein, taxon">yeast_orfs_pruned.fasta</note>
	-->
	<note type="input" label="protein, taxon">yeast_orfs_all_REV.20060126.short.fasta</note><note type="input" label="spectrum, path">spectra</note>
	<note type="input" label="output, path">full_tandem_output_path</note>
	<note type="input" label="output, sequence path">full_tandem_output_sequence_path</note>

	<note type="input" label="list path, taxonomy information">taxonomy.xml</note>


	
 	<note type="input" label="output, histogram column width">30</note>
	<note type="input" label="output, histograms">yes</note>
	<note type="input" label="output, log path"></note>
	<note type="input" label="output, maximum valid expectation value">0.1</note>
	<note type="input" label="output, message">1234567890</note>
	<note type="input" label="output, one sequence copy">no</note>
	<note type="input" label="output, parameters">yes</note>
 	<note type="input" label="output, path hashing">yes</note>
	<note type="input" label="output, performance">yes</note>
	<note type="input" label="output, proteins">yes</note>
	<note type="input" label="output, results">all</note>
	<note type="input" label="output, sequences">no</note>
	<note type="input" label="output, sort results by">spectrum</note>
	<note type="input" label="output, spectra">yes</note>
	<note type="input" label="output, xsl path">tandem-style.xsl</note>
	<note type="input" label="protein, C-terminal residue modification mass"></note>
	<note type="input" label="protein, N-terminal residue modification mass"></note>
	<note type="input" label="protein, cleavage semi">no</note>
    <!--<note type="input" label="protein, cleavage site">[RK]|{P}</note>     -->
    <note type="input" label="protein, cleavage site">[K]</note>
	<note type="input" label="protein, homolog management">no</note>
	<note type="input" label="protein, modified residue mass file"></note>
	<note type="input" label="refine">no</note>
	<note type="input" label="refine, maximum valid expectation value">0.1</note>
	<note type="input" label="refine, potential modification mass">15.994915@M,8.014199@K,10.008269@R,79.9663@H,79.9663@R,79.9663@T,79.9663@Y,79.9663@K</note>
	<note type="input" label="refine, sequence path"></note>
	<note type="input" label="refine, spectrum synthesis">yes</note>
	<note type="input" label="residue, modification mass">57.021464@C</note>
	<note type="input" label="residue, potential modification mass">79.9663@H,79.9663@R,79.9663@T,79.9663@Y,79.9663@K</note>
	<note type="input" label="residue, potential modification motif"></note>
	<note type="input" label="scoring, a ions">no</note>
	<note type="input" label="scoring, algorithm">k-score</note>
	<note type="input" label="scoring, b ions">yes</note>
	<note type="input" label="scoring, c ions">no</note>
	<note type="input" label="scoring, cyclic permutation">no</note>
	<note type="input" label="scoring, include reverse">no</note>
	<note type="input" label="scoring, maximum missed cleavage sites">2</note>
	<note type="input" label="scoring, minimum ion count">1</note>
	<note type="input" label="scoring, x ions">no</note>
	<note type="input" label="scoring, y ions">yes</note>
	<note type="input" label="scoring, z ions">no</note>
	<note type="input" label="spectrum, dynamic range">10000.0</note>
	<note type="input" label="spectrum, fragment mass type">monoisotopic</note>
	<note type="input" label="spectrum, fragment monoisotopic mass error">0.4</note>
	<note type="input" label="spectrum, fragment monoisotopic mass error units">Daltons</note>
	<note type="input" label="spectrum, maximum parent charge">5</note>
	<note type="input" label="spectrum, minimum fragment mz">125.0</note>
	<note type="input" label="spectrum, minimum parent m+h">600.0</note>
	<note type="input" label="spectrum, minimum peaks">10</note>
<note> PRECURSOR MASS TOLERANCES. In the example below, a -2.0 Da to 4.0 Da (monoisotopic mass) window is searched for peptide candidates. Since this is monoisotopic mass, so for non-accurate-mass instruments, for which the precursor is often taken nearer to the isotopically averaged mass, an asymmetric tolerance (-2.0 Da to 4.0 Da) is preferable. This somewhat imitates a (-3.0 Da to 3.0 Da) window for averaged mass (but not exactly)</note>
	<note type="input" label="spectrum, parent monoisotopic mass error minus">2.0</note>
	<note type="input" label="spectrum, parent monoisotopic mass error plus">4.1</note>
	<note type="input" label="spectrum, parent monoisotopic mass error units">Daltons</note>
	<note type="input" label="spectrum, parent monoisotopic mass isotope error">no</note>
	<note type="input" label="spectrum, sequence batch size">1000</note>
	<note type="input" label="spectrum, threads">1</note>
	<note type="input" label="spectrum, total peaks">400</note>
	<note type="input" label="spectrum, use conditioning">no</note>
	<note type="input" label="spectrum, use noise suppression">yes</note>
</bioml>

